
# Instrument driver configuration file.

[General settings]

# The name is shown in all the configuration windows
name: Zurich Instruments PQSC

# The version string should be updated whenever changes are made to this config file
version: 0.1

# Name of folder containing the code defining a custom driver. Do not define this item
# or leave it blank for any standard driver based on the built-in VISA interface.
driver_path: Zurich_Instruments_PQSC
support_arm: True
support_hardware_loop: False
startup : Do nothing

interface: Other
# address: <autodetect>
[Model and options]
# The option section allow instruments with different options to use the same driver

# Check instrument model id at startup (True or False). Default is False
check_model: False

# List of models supported by this driver
model_str_1: PQSC



# General VISA settings for the instrument.
[VISA settings]

# Enable or disable communication over the VISA protocol (True or False)
# If False, the driver will not perform any operations (unless there is a custom driver).
use_visa: False

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
#    datatype:           The data type should be one of DOUBLE, BOOLEAN, COMBO, STRING,
#                        COMPLEX, VECTOR, VECTOR_COMPLEX, PATH or BUTTON. Only DOUBLE, BOOLEAN and COMBO
#                        datatypes can be stepped in a measurement. The BUTTON datatype does not have an
#                        associated value, and can therefore not be controlled from the Measurement
#                        program. It is typically used to manually force an instrument to perform a
#                        certain task.
#    label:              Label shown next to control in user interface. If not
#                        specified, the label defaults to the name of the quantity.
#    unit:               Unit for the quantity.
#    def_value:          Default value.
#    tooltip:            Tool tip shown when hovering the mouse over the control
#                        in the driver GUI. HTML tags are used to ensure that
#                        tootips are wrapped in the UI.
#    low_lim:            Lowest allowable value. Defaults to -INF.
#    high_lim:           Highest allowable values. Defaults to +INF.
#    x_name:             X-axis label for a vector data. Only valid if datatype is VECTOR or VECTOR_COMPLEX.
#    x_unit:             X-axis unit for a vector data. Only valid if datatype is VECTOR or VECTOR_COMPLEX.
#    combo_def_1, combo_def_2, ...:      Options for a pull-down combo box. Only used when datatype is COMBO.
#    group:              Name of the group where the control belongs.
#    section:            Name of the section where the control belongs.
#    state_quant:        Quantity that determines this control's visibility.
#    state_value_1,state_value_2, ...:            Values of state_quant for which the control is visible.
#    model_value_1, model_value_2, ...:           Values of model for which the control is
#                        visible. The value must match one of the models defined in the Model and
#                        Options-section described above.
#    option_value_1, option_value_2, ...: Values of option for which the control is visible.
#    permission:         Sets read/writability, options are BOTH, READ, WRITE or NONE.
#                        Default is BOTH.
#    show_in_measurement_dlg:            This setting is optional. If True, the
#                        quantity will be automatically shown when adding the instrument to a Measurement
#                        configuration. This is useful for instrument that contain a lot of quantities,
#                        but where most are not likely to be stepped in a measurement.
#    set_cmd:            Command used to send data to the instrument. Put "<*>" where the value
#                        should appear. If "<*>" does not occur in the string, the value will be added
#                        after the command.
#    get_cmd:            Command used to get the data from the instrument. Default is set_cmd?.
#    cmd_def_1, cmd_def_2, ...:       List of strings that define what is sent to/read from
#                        an instrument for a quantity that is defined as a a list of multiple options.
#                        Only used when datatype is COMBO.




#########################################
# SECTION: Device
# GROUP: Revisions

[Revisions - Data Server Version]
label: Data Server Version
datatype: STRING
section: Device
group: Revisions
def_value: 
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Contains the revision number of the Zurich Instruments Data Server.<br/><b>/zi/about/revision</b></p></body></html>
get_cmd: /zi/about/revision
permission: READ

[Revisions - Firmware Version]
label: Firmware Version
datatype: STRING
section: Device
group: Revisions
def_value: 
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Revision of the device-internal controller software.<br/><b>/system/fwrevision</b></p></body></html>
get_cmd: /system/fwrevision
permission: READ

[Revisions - FPGA Version]
label: FPGA Version
datatype: STRING
section: Device
group: Revisions
def_value: 
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>HDL firmware revision.<br/><b>/system/fpgarevision</b></p></body></html>
get_cmd: /system/fpgarevision
permission: READ


#########################################
# SECTION: Device
# GROUP: Configuration

[Configuration - Reference Clock Source]
label: Reference Clock Source
datatype: COMBO
section: Device
group: Configuration
def_value: internal
tooltip: <html><head/><body><p>The intended reference clock source. When the source is changed, all the instruments connected with ZSync links will be disconnected. The connection should be re-established manually.<br/><b>/system/clocks/referenceclock/in/source</b></p></body></html>
set_cmd: /system/clocks/referenceclock/in/source
get_cmd: /system/clocks/referenceclock/in/source
permission: BOTH
cmd_def_1: 0
combo_def_1: internal
cmd_def_2: 1
combo_def_2: external


#########################################
# SECTION: Device
# GROUP: Preset

[Preset - Factory Reset]
label: Factory Reset
datatype: BUTTON
section: Device
group: Preset
tooltip: <html><head/><body><p>Load the factory default settings.<br/></p></body></html>
permission: BOTH


#########################################
# SECTION: Display Options
# GROUP: ZSYNC Output Port 1

[ZSYNC Output Port 1 - Display Enable Bit Forwarding]
label: Display Enable Bit Forwarding
datatype: BOOLEAN
section: Display Options
group: ZSYNC Output Port 1
def_value: True
show_in_measurement_dlg: False
permission: READ


#########################################
# SECTION: Display Options
# GROUP: ZSYNC Output Port 2

[ZSYNC Output Port 2 - Display Enable Bit Forwarding]
label: Display Enable Bit Forwarding
datatype: BOOLEAN
section: Display Options
group: ZSYNC Output Port 2
def_value: True
show_in_measurement_dlg: False
permission: READ


#########################################
# SECTION: Display Options
# GROUP: ZSYNC Output Port 3

[ZSYNC Output Port 3 - Display Enable Bit Forwarding]
label: Display Enable Bit Forwarding
datatype: BOOLEAN
section: Display Options
group: ZSYNC Output Port 3
def_value: True
show_in_measurement_dlg: False
permission: READ


#########################################
# SECTION: Display Options
# GROUP: ZSYNC Output Port 4

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# SECTION: Ports
# GROUP: Control
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
[Control - Repetitions (Number of Triggers)]
label: Repetitions (Number of Triggers)
datatype: DOUBLE
section: Ports
group: Control
def_value: 1
tooltip: <html><head/><body><p>Number of triggers to be generated.<br/><b>/execution/repetitions</b></p></body></html>
set_cmd: /execution/repetitions
get_cmd: /execution/repetitions
permission: BOTH

[Control - Holdoff Time]
label: Holdoff Time
datatype: DOUBLE
section: Ports
group: Control
def_value: 9.999999406318238e-08
unit: s
tooltip: <html><head/><body><p>Hold-off time between repeated triggers.<br/><b>/execution/holdoff</b></p></body></html>
set_cmd: /execution/holdoff
get_cmd: /execution/holdoff
permission: BOTH

[Control - Run/Stop]
label: Run/Stop
datatype: BUTTON
section: Ports
group: Control
tooltip: <html><head/><body><p>Activate the trigger generation. Auto-resets to zero when done.<br/></p></body></html>
permission: BOTH


#########################################
# SECTION: Ports
# GROUP: ZSYNC Device Port 1

[ZSYNC Device Port 1 - Serial]
label: Serial
datatype: STRING
section: Ports
group: ZSYNC Device Port 1
def_value: 
tooltip: <html><head/><body><p>The device ID of the instrument connected to this port.<br/><b>/zsyncs/0/connection/serial</b></p></body></html>
get_cmd: /zsyncs/0/connection/serial
permission: READ

[ZSYNC Device Port 1 - Type]
label: Type
datatype: STRING
section: Ports
group: ZSYNC Device Port 1
def_value: 
tooltip: <html><head/><body><p>The device type of the instrument connected to this port.<br/><b>/zsyncs/0/connection/devtype</b></p></body></html>
get_cmd: /zsyncs/0/connection/devtype
permission: READ

[ZSYNC Device Port 1 - Alias]
label: Alias
datatype: STRING
section: Ports
group: ZSYNC Device Port 1
def_value: 
tooltip: <html><head/><body><p>User-given name to the instrument connected to this port.<br/><b>/zsyncs/0/connection/alias</b></p></body></html>
set_cmd: /zsyncs/0/connection/alias
get_cmd: /zsyncs/0/connection/alias
permission: BOTH


#########################################
# SECTION: Ports
# GROUP: ZSYNC Device Port 2

[ZSYNC Device Port 2 - Serial]
label: Serial
datatype: STRING
section: Ports
group: ZSYNC Device Port 2
def_value: 
tooltip: <html><head/><body><p>The device ID of the instrument connected to this port.<br/><b>/zsyncs/1/connection/serial</b></p></body></html>
get_cmd: /zsyncs/1/connection/serial
permission: READ

[ZSYNC Device Port 2 - Type]
label: Type
datatype: STRING
section: Ports
group: ZSYNC Device Port 2
def_value: 
tooltip: <html><head/><body><p>The device type of the instrument connected to this port.<br/><b>/zsyncs/1/connection/devtype</b></p></body></html>
get_cmd: /zsyncs/1/connection/devtype
permission: READ

[ZSYNC Device Port 2 - Alias]
label: Alias
datatype: STRING
section: Ports
group: ZSYNC Device Port 2
def_value: 
tooltip: <html><head/><body><p>User-given name to the instrument connected to this port.<br/><b>/zsyncs/1/connection/alias</b></p></body></html>
set_cmd: /zsyncs/1/connection/alias
get_cmd: /zsyncs/1/connection/alias
permission: BOTH


#########################################
# SECTION: Ports
# GROUP: ZSYNC Device Port 3

[ZSYNC Device Port 3 - Serial]
label: Serial
datatype: STRING
section: Ports
group: ZSYNC Device Port 3
def_value: 
tooltip: <html><head/><body><p>The device ID of the instrument connected to this port.<br/><b>/zsyncs/2/connection/serial</b></p></body></html>
get_cmd: /zsyncs/2/connection/serial
permission: READ

[ZSYNC Device Port 3 - Type]
label: Type
datatype: STRING
section: Ports
group: ZSYNC Device Port 3
def_value: 
tooltip: <html><head/><body><p>The device type of the instrument connected to this port.<br/><b>/zsyncs/2/connection/devtype</b></p></body></html>
get_cmd: /zsyncs/2/connection/devtype
permission: READ

[ZSYNC Device Port 3 - Alias]
label: Alias
datatype: STRING
section: Ports
group: ZSYNC Device Port 3
def_value: 
tooltip: <html><head/><body><p>User-given name to the instrument connected to this port.<br/><b>/zsyncs/2/connection/alias</b></p></body></html>
set_cmd: /zsyncs/2/connection/alias
get_cmd: /zsyncs/2/connection/alias
permission: BOTH


#########################################
# SECTION: Ports
# GROUP: ZSYNC Device Port 4

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# SECTION: Register Forwarding
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

[ZSYNC Output Port 1 - Enable Forwarding]
label: Enable Forwarding
datatype: BOOLEAN
section: Register Forwarding
group: ZSYNC Output Port 1
def_value: 0
tooltip: <html><head/><body><p>Enable readout registers forwarding for a given port.<br/><b>/zsyncs/0/output/registerbank/enable</b></p></body></html>
set_cmd: /zsyncs/0/output/registerbank/enable
get_cmd: /zsyncs/0/output/registerbank/enable
permission: BOTH

[ZSYNC Output Port 1 - Bit 1 Register]
label: Bit 1 Register
datatype: COMBO
section: Register Forwarding
group: ZSYNC Output Port 1
def_value: 1
tooltip: <html><head/><body><p>The readout register forwarded.<br/><b>/zsyncs/0/output/registerbank/sources/0/register</b></p></body></html>
set_cmd: /zsyncs/0/output/registerbank/sources/0/register
get_cmd: /zsyncs/0/output/registerbank/sources/0/register
permission: BOTH
cmd_def_1: 0
combo_def_1: 1
cmd_def_2: 1
combo_def_2: 2
cmd_def_3: 2
combo_def_3: 3
cmd_def_4: 3
combo_def_4: 4
cmd_def_5: 4
combo_def_5: 5
cmd_def_6: 5
combo_def_6: 6
cmd_def_7: 6
combo_def_7: 7
cmd_def_8: 7
combo_def_8: 8
cmd_def_9: 8
combo_def_9: 9
cmd_def_10: 9
combo_def_10: 10
cmd_def_11: 10
combo_def_11: 11
cmd_def_12: 11
combo_def_12: 12
cmd_def_13: 12
combo_def_13: 13
cmd_def_14: 13
combo_def_14: 14
cmd_def_15: 14
combo_def_15: 15
cmd_def_16: 15
combo_def_16: 16
cmd_def_17: 16
combo_def_17: 17
cmd_def_18: 17
combo_def_18: 18
cmd_def_19: 18
combo_def_19: 19
cmd_def_20: 19
combo_def_20: 20
cmd_def_21: 20
combo_def_21: 21
cmd_def_22: 21
combo_def_22: 22
cmd_def_23: 22
combo_def_23: 23
cmd_def_24: 23
combo_def_24: 24
cmd_def_25: 24
combo_def_25: 25
cmd_def_26: 25
combo_def_26: 26
cmd_def_27: 26
combo_def_27: 27
cmd_def_28: 27
combo_def_28: 28
cmd_def_29: 28
combo_def_29: 29
cmd_def_30: 29
combo_def_30: 30
cmd_def_31: 30
combo_def_31: 31
cmd_def_32: 31
combo_def_32: 32
state_quant: ZSYNC Output Port 1 - Enable Forwarding
state_value_1: True

[ZSYNC Output Port 1 - Bit 1 Index]
label: Bit 1 Index
datatype: COMBO
section: Register Forwarding
group: ZSYNC Output Port 1
def_value: 1
tooltip: <html><head/><body><p>The index of the bit in the readout register forwarded.<br/><b>/zsyncs/0/output/registerbank/sources/0/index</b></p></body></html>
set_cmd: /zsyncs/0/output/registerbank/sources/0/index
get_cmd: /zsyncs/0/output/registerbank/sources/0/index
permission: BOTH
cmd_def_1: 0
combo_def_1: 1
cmd_def_2: 1
combo_def_2: 2
cmd_def_3: 2
combo_def_3: 3
cmd_def_4: 3
combo_def_4: 4
cmd_def_5: 4
combo_def_5: 5
cmd_def_6: 5
combo_def_6: 6
cmd_def_7: 6
combo_def_7: 7
cmd_def_8: 7
combo_def_8: 8
cmd_def_9: 8
combo_def_9: 9
cmd_def_10: 9
combo_def_10: 10
cmd_def_11: 10
combo_def_11: 11
cmd_def_12: 11
combo_def_12: 12
cmd_def_13: 12
combo_def_13: 13
cmd_def_14: 13
combo_def_14: 14
cmd_def_15: 14
combo_def_15: 15
cmd_def_16: 15
combo_def_16: 16
state_quant: ZSYNC Output Port 1 - Enable Forwarding
state_value_1: True

[ZSYNC Output Port 1 - Enable Bit 1 Forwarding]
label: Enable Bit 1 Forwarding
datatype: BOOLEAN
section: Register Forwarding
group: ZSYNC Output Port 1
def_value: 0
tooltip: <html><head/><body><p>Enable forwarding of given bit.<br/><b>/zsyncs/0/output/registerbank/sources/0/enable</b></p></body></html>
set_cmd: /zsyncs/0/output/registerbank/sources/0/enable
get_cmd: /zsyncs/0/output/registerbank/sources/0/enable
permission: BOTH
state_quant: ZSYNC Output Port 1 - Display Enable Bit Forwarding
state_value_1: True

[ZSYNC Output Port 1 - Bit 2 Register]
label: Bit 2 Register
datatype: COMBO
section: Register Forwarding
group: ZSYNC Output Port 1
def_value: 1
tooltip: <html><head/><body><p>The readout register forwarded.<br/><b>/zsyncs/0/output/registerbank/sources/1/register</b></p></body></html>
set_cmd: /zsyncs/0/output/registerbank/sources/1/register
get_cmd: /zsyncs/0/output/registerbank/sources/1/register
permission: BOTH
cmd_def_1: 0
combo_def_1: 1
cmd_def_2: 1
combo_def_2: 2
cmd_def_3: 2
combo_def_3: 3
cmd_def_4: 3
combo_def_4: 4
cmd_def_5: 4
combo_def_5: 5
cmd_def_6: 5
combo_def_6: 6
cmd_def_7: 6
combo_def_7: 7
cmd_def_8: 7
combo_def_8: 8
cmd_def_9: 8
combo_def_9: 9
cmd_def_10: 9
combo_def_10: 10
cmd_def_11: 10
combo_def_11: 11
cmd_def_12: 11
combo_def_12: 12
cmd_def_13: 12
combo_def_13: 13
cmd_def_14: 13
combo_def_14: 14
cmd_def_15: 14
combo_def_15: 15
cmd_def_16: 15
combo_def_16: 16
cmd_def_17: 16
combo_def_17: 17
cmd_def_18: 17
combo_def_18: 18
cmd_def_19: 18
combo_def_19: 19
cmd_def_20: 19
combo_def_20: 20
cmd_def_21: 20
combo_def_21: 21
cmd_def_22: 21
combo_def_22: 22
cmd_def_23: 22
combo_def_23: 23
cmd_def_24: 23
combo_def_24: 24
cmd_def_25: 24
combo_def_25: 25
cmd_def_26: 25
combo_def_26: 26
cmd_def_27: 26
combo_def_27: 27
cmd_def_28: 27
combo_def_28: 28
cmd_def_29: 28
combo_def_29: 29
cmd_def_30: 29
combo_def_30: 30
cmd_def_31: 30
combo_def_31: 31
cmd_def_32: 31
combo_def_32: 32
state_quant: ZSYNC Output Port 1 - Enable Forwarding
state_value_1: True

[ZSYNC Output Port 1 - Bit 2 Index]
label: Bit 2 Index
datatype: COMBO
section: Register Forwarding
group: ZSYNC Output Port 1
def_value: 1
tooltip: <html><head/><body><p>The index of the bit in the readout register forwarded.<br/><b>/zsyncs/0/output/registerbank/sources/1/index</b></p></body></html>
set_cmd: /zsyncs/0/output/registerbank/sources/1/index
get_cmd: /zsyncs/0/output/registerbank/sources/1/index
permission: BOTH
cmd_def_1: 0
combo_def_1: 1
cmd_def_2: 1
combo_def_2: 2
cmd_def_3: 2
combo_def_3: 3
cmd_def_4: 3
combo_def_4: 4
cmd_def_5: 4
combo_def_5: 5
cmd_def_6: 5
combo_def_6: 6
cmd_def_7: 6
combo_def_7: 7
cmd_def_8: 7
combo_def_8: 8
cmd_def_9: 8
combo_def_9: 9
cmd_def_10: 9
combo_def_10: 10
cmd_def_11: 10
combo_def_11: 11
cmd_def_12: 11
combo_def_12: 12
cmd_def_13: 12
combo_def_13: 13
cmd_def_14: 13
combo_def_14: 14
cmd_def_15: 14
combo_def_15: 15
cmd_def_16: 15
combo_def_16: 16
state_quant: ZSYNC Output Port 1 - Enable Forwarding
state_value_1: True

[ZSYNC Output Port 1 - Enable Bit 2 Forwarding]
label: Enable Bit 2 Forwarding
datatype: BOOLEAN
section: Register Forwarding
group: ZSYNC Output Port 1
def_value: 0
tooltip: <html><head/><body><p>Enable forwarding of given bit.<br/><b>/zsyncs/0/output/registerbank/sources/1/enable</b></p></body></html>
set_cmd: /zsyncs/0/output/registerbank/sources/1/enable
get_cmd: /zsyncs/0/output/registerbank/sources/1/enable
permission: BOTH
state_quant: ZSYNC Output Port 1 - Display Enable Bit Forwarding
state_value_1: True

[ZSYNC Output Port 1 - Bit 3 Register]
label: Bit 3 Register
datatype: COMBO
section: Register Forwarding
group: ZSYNC Output Port 1
def_value: 1
tooltip: <html><head/><body><p>The readout register forwarded.<br/><b>/zsyncs/0/output/registerbank/sources/2/register</b></p></body></html>
set_cmd: /zsyncs/0/output/registerbank/sources/2/register
get_cmd: /zsyncs/0/output/registerbank/sources/2/register
permission: BOTH
cmd_def_1: 0
combo_def_1: 1
cmd_def_2: 1
combo_def_2: 2
cmd_def_3: 2
combo_def_3: 3
cmd_def_4: 3
combo_def_4: 4
cmd_def_5: 4
combo_def_5: 5
cmd_def_6: 5
combo_def_6: 6
cmd_def_7: 6
combo_def_7: 7
cmd_def_8: 7
combo_def_8: 8
cmd_def_9: 8
combo_def_9: 9
cmd_def_10: 9
combo_def_10: 10
cmd_def_11: 10
combo_def_11: 11
cmd_def_12: 11
combo_def_12: 12
cmd_def_13: 12
combo_def_13: 13
cmd_def_14: 13
combo_def_14: 14
cmd_def_15: 14
combo_def_15: 15
cmd_def_16: 15
combo_def_16: 16
cmd_def_17: 16
combo_def_17: 17
cmd_def_18: 17
combo_def_18: 18
cmd_def_19: 18
combo_def_19: 19
cmd_def_20: 19
combo_def_20: 20
cmd_def_21: 20
combo_def_21: 21
cmd_def_22: 21
combo_def_22: 22
cmd_def_23: 22
combo_def_23: 23
cmd_def_24: 23
combo_def_24: 24
cmd_def_25: 24
combo_def_25: 25
cmd_def_26: 25
combo_def_26: 26
cmd_def_27: 26
combo_def_27: 27
cmd_def_28: 27
combo_def_28: 28
cmd_def_29: 28
combo_def_29: 29
cmd_def_30: 29
combo_def_30: 30
cmd_def_31: 30
combo_def_31: 31
cmd_def_32: 31
combo_def_32: 32
state_quant: ZSYNC Output Port 1 - Enable Forwarding
state_value_1: True

[ZSYNC Output Port 1 - Bit 3 Index]
label: Bit 3 Index
datatype: COMBO
section: Register Forwarding
group: ZSYNC Output Port 1
def_value: 1
tooltip: <html><head/><body><p>The index of the bit in the readout register forwarded.<br/><b>/zsyncs/0/output/registerbank/sources/2/index</b></p></body></html>
set_cmd: /zsyncs/0/output/registerbank/sources/2/index
get_cmd: /zsyncs/0/output/registerbank/sources/2/index
permission: BOTH
cmd_def_1: 0
combo_def_1: 1
cmd_def_2: 1
combo_def_2: 2
cmd_def_3: 2
combo_def_3: 3
cmd_def_4: 3
combo_def_4: 4
cmd_def_5: 4
combo_def_5: 5
cmd_def_6: 5
combo_def_6: 6
cmd_def_7: 6
combo_def_7: 7
cmd_def_8: 7
combo_def_8: 8
cmd_def_9: 8
combo_def_9: 9
cmd_def_10: 9
combo_def_10: 10
cmd_def_11: 10
combo_def_11: 11
cmd_def_12: 11
combo_def_12: 12
cmd_def_13: 12
combo_def_13: 13
cmd_def_14: 13
combo_def_14: 14
cmd_def_15: 14
combo_def_15: 15
cmd_def_16: 15
combo_def_16: 16
state_quant: ZSYNC Output Port 1 - Enable Forwarding
state_value_1: True

[ZSYNC Output Port 1 - Enable Bit 3 Forwarding]
label: Enable Bit 3 Forwarding
datatype: BOOLEAN
section: Register Forwarding
group: ZSYNC Output Port 1
def_value: 0
tooltip: <html><head/><body><p>Enable forwarding of given bit.<br/><b>/zsyncs/0/output/registerbank/sources/2/enable</b></p></body></html>
set_cmd: /zsyncs/0/output/registerbank/sources/2/enable
get_cmd: /zsyncs/0/output/registerbank/sources/2/enable
permission: BOTH
state_quant: ZSYNC Output Port 1 - Display Enable Bit Forwarding
state_value_1: True

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

[ZSYNC Output Port 2 - Enable Forwarding]
label: Enable Forwarding
datatype: BOOLEAN
section: Register Forwarding
group: ZSYNC Output Port 2
def_value: 0
tooltip: <html><head/><body><p>Enable readout registers forwarding for a given port.<br/><b>/zsyncs/1/output/registerbank/enable</b></p></body></html>
set_cmd: /zsyncs/1/output/registerbank/enable
get_cmd: /zsyncs/1/output/registerbank/enable
permission: BOTH

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

[ZSYNC Output Port 3 - Enable Forwarding]
label: Enable Forwarding
datatype: BOOLEAN
section: Register Forwarding
group: ZSYNC Output Port 3
def_value: 0
tooltip: <html><head/><body><p>Enable readout registers forwarding for a given port.<br/><b>/zsyncs/2/output/registerbank/enable</b></p></body></html>
set_cmd: /zsyncs/2/output/registerbank/enable
get_cmd: /zsyncs/2/output/registerbank/enable
permission: BOTH

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

